config:
  title: Aquarium Yeast Display
  description: A workflow for doing several types of yeast display experiments with Aquarium
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Sarah Goldberg, affiliation: University of Washington}, {name: Abe Miller, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: dvn.strcklnd@gmail.com}
  acknowledgements: [{name: Sam Halabiya, affiliation: University of Washington}, {name: Cami Cordray, affiliation: University of Washington}]
  github: {user: dvnstrcklnd, repo: aq-yeast-display}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: DNA Library, description: A sample that contains a pool of DNA molecules with many unique sequences}
    - {name: Oligo Pool, ftype: sample, sample_types: [Oligo Pool]}
  - {name: Oligo Pool, description: Pool or library of ssDNA oligos. May contain one or more sublibraries. In array fields, the n-th position corresponds to n-th sublibrary. "forward priming site" and "reverse priming site" are read as primer sequences.}
    - {name: Manufacturer, ftype: string, required: true}
    - {name: Oligo Library ID, ftype: number, required: true}
    - {name: inner forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: inner reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: min length (nt) (array), ftype: number, array: true, required: true}
    - {name: max length (nt) (array), ftype: number, array: true, required: true}
    - {name: variants (array), ftype: number, array: true, required: true}
    - {name: sublibrary name (array), ftype: string, array: true, required: true}
    - {name: forward priming site (array), ftype: string, array: true, required: true}
    - {name: reverse priming site (array), ftype: string, array: true, required: true}
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
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object_types:
  - {name: Labeled Yeast Library Suspension, description: Yeast library labeled with dye-conjugated antibody (e.g., anti-Myc-FITC), handler: sample_container, unit: DNA Library, release_method: return, sample_type_name: DNA Library}
  - {name: Yeast Library Liquid Culture, description: A special case of yeast culture that contains a strain library, handler: sample_container, unit: DNA Library, release_method: return, sample_type_name: DNA Library}
  - {name: Yeast Library in Soln 1, description: concentrated yeast DNA library sample stored in Zymoprep solution 1, in -80, handler: sample_container, unit: DNA Library, release_method: return, prefix: M80, sample_type_name: DNA Library}
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operation_type: Store Yeast Library Sample
category: Next Gen Prep
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Culture, sample_types: [DNA Library, DNA Library], object_types: [Labeled Yeast Library Suspension, Yeast Library Liquid Culture], routing: Y}
  - {ftype: sample, role: output, name: Stored sample rep 1, sample_types: [DNA Library], object_types: [Yeast Library in Soln 1], routing: Y}
  - {ftype: sample, role: output, name: Stored sample rep 2, sample_types: [DNA Library], object_types: [Yeast Library in Soln 1], routing: Y}
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documentation:
Step 1 in preparation of yeast DNA library samples for NGS. 
Full flow is:
1. Store concentrated  sample in Zymoprep Solution 1, in -80
2. Zymoprep sample and clean
3. Exonuclease digestion and purification of sample
4. qPCR to amplify, clean up, using pETCON adapters 
5. qPCR to amplify and add illumina adapters

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cost_model:
def cost(_op)
  { labor: 12.06, materials: 0.27 }
end

protocol:
# SG
# Refactored by Devin Strickland 2/17/18

needs "Standard Libs/Debug"
needs "Yeast Display/YeastDisplayHelper"
needs "Yeast Display/YeastDisplayShows"

class Protocol
    
    include Debug, YeastDisplayHelper, YeastDisplayShows
    
    attr_accessor :low_growth_ops, :ready_ops

    INPUT = "Yeast Culture"
    OUTPUT_PREFIX = "Stored sample rep"
    OUTPUT_1 = "#{OUTPUT_PREFIX} 1"
    OUTPUT_2 = "#{OUTPUT_PREFIX} 2"
    
    MIN_OD = 0.2
    
    OD_ML_NEEDED = 9.0
    NUMBER_OF_REPLICATES = 2 # 2 stored samples for each input
    CENTRIFUGE_TUBE = "15 ml <b>polypropylene</b> tube"
    CENTRIFUGE_TIME = 5 # min
    CENTRIFUGE_G = 4696 # g
    RESUSPENSION_BUFFER = "Zymoprep Digestion Buffer (Solution 1)"
    RESUSPENSION_VOL = { qty: 200, units: 'µl'}
    CONCENTRATED_VOL = { qty: 225, units: 'µl'}
    

    def main   
        
        operations.running.retrieve
        
        set_od_ml_needed
        
        measure_ods
            
        @low_growth_ops, @ready_ops = partition_ops_by_growth
        
        put_back
        
        return {} unless @ready_ops.present?
        
        gather_additional_materials
        
        # TODO: should only make ready operations
        # since i push some back to pending, i shouldnt make the outputs to those operations
        
        
        pushed_back = false
        pushed_back = check_volumes
        @ready_ops.make
        
        if @ready_ops.length > 0
        
          spin_down
          
          resuspend
          
          clean_up pushed_back
          
          @ready_ops.store
          
          # if post-sort, save bin info
          @ready_ops.each { |op|
              if( !(op.input(INPUT).item.get(:bin).nil?) ) # sorted sample
                  op.output(OUTPUT_1).item.associate(:bin, op.input(INPUT).item.get(:bin))
                  op.output(OUTPUT_2).item.associate(:bin, op.input(INPUT).item.get(:bin))
              end
          }
        else 
          clean_up_pushed_back
        end
          
        return {} 
        
    end
    
    def set_od_ml_needed
        set_test_od_mls if debug
        
        operations.each do |op|
            op.associate(:od_ml_needed, OD_ML_NEEDED) unless op.associations[:od_ml_needed]
        end
    end
    
    def gather_additional_materials
        min_resuspension_vol = RESUSPENSION_VOL[:qty] * NUMBER_OF_REPLICATES * @ready_ops.length
        
        show do
            title "You will also need"
            check "#{self.ready_ops.length} #{CENTRIFUGE_TUBE}(s)"
            check "#{RESUSPENSION_BUFFER} (#{min_resuspension_vol} #{RESUSPENSION_VOL[:units]})"
            warning "Make sure you take polypropylene and not polystyrene tubes!"
        end
    end
    
    def measure_ods
        unique_culture_operations = operations.uniq { |op| op.input(INPUT).item }.extend(OperationList)
        
        measure_culture_ods(unique_culture_operations)
        
        set_test_ods if debug
        
        unique_culture_operations.each { |op| op.set_input_data(INPUT, :od, op.temporary[:od]) }
    end
    
    def partition_ops_by_growth
        operations.running.each do |op|
            op.temporary[:growth] = op.input(INPUT).item.get(:od).to_f < MIN_OD ? :low_growth : :ready 
        end
        
        grouped_ops = operations.running.group_by { |op| op.temporary[:growth] }
        
        [grouped_ops[:low_growth], grouped_ops[:ready]]
    end
    
    def put_back
        return unless @low_growth_ops.present?
        
        @low_growth_ops.each { |op| op.change_status("pending") }
        
        show do
            title "Return low-growth cultures to shaker"
            
            note "Return the following cultures to the shaker for additional growth:"
            table self.low_growth_ops.start_table
              .input_item(INPUT)
              .end_table
        end
    end
    
    def spin_down
        show do
            title "Transfer cultures"
            
            note "Get #{self.ready_ops.length} #{CENTRIFUGE_TUBE}s."
            note "Label the tubes according to the #{INPUT} column in the table."
            note "Transfer the indicated volume of each culture to the corresponding tube:"
            table self.ready_ops.start_table
              .input_item(INPUT)
              .custom_column(heading: "Culture (ml)", checkable: true) { |op| library_culture_volume(op).round(1) }
              .end_table
        end
        
        show do
            title "Spin down cultures"
            
            check "Centrifuge the #{CENTRIFUGE_TUBE}(s) for #{CENTRIFUGE_TIME} min at #{CENTRIFUGE_G} g"
            warning "Make sure tubes are balanced!"
            check "Pour off supernatant. Knock tube(s) on a kimwipe to dry remaining liquid."
        end
    end
    
    def resuspend
        vol_to_add = NUMBER_OF_REPLICATES * RESUSPENSION_VOL[:qty]
        
        show do
            title "Resuspend and aliquot cells"
            
            check "Add #{vol_to_add} #{RESUSPENSION_VOL[:units]} of #{RESUSPENSION_BUFFER} to each #{CENTRIFUGE_TUBE}."
            check "Vortex each #{CENTRIFUGE_TUBE} until cells are fully resuspended."
            note "Label 1.5 mL tubes according to the <b>#{NUMBER_OF_REPLICATES}</b> #{OUTPUT_PREFIX} columns in the table."
            note "Transfer #{qty_display(CONCENTRATED_VOL)} from each resuspended #{INPUT} to the labeled tubes according to the table."
            
            table self.ready_ops.start_table
                .input_item(INPUT)
                .output_item(OUTPUT_1, checkable: true)
                .output_item(OUTPUT_2, checkable: true)
                .end_table
        end
    end 
    
    def clean_up pushed_back
        @ready_ops.each { |op| op.input(INPUT).item.mark_as_deleted }
        
        show do
            title "Cleanup"
            
            check "Dispose of any input sample cultures remaining on bench."
            check "Return the #{RESUSPENSION_BUFFER} to the kit."
            
            if pushed_back
                note "Please notify a lab manager that one or more of the operations were pushed back to pending"
            end
        end
    end
    
    def library_culture_volume(op)
        NUMBER_OF_REPLICATES * op.associations[:od_ml_needed].to_f / (op.input(INPUT).item.get(:od) * 10.0)
    end
    
    def set_test_od_mls
        test_od_mls = [0.89, 4.5, 3.0, 2.0, 1.33]
        operations.running.each { |op| op.associate(:od_ml_needed, test_od_mls.rotate![0]) }
    end
    
    def set_test_ods
        test_ods = [0.3] #[0.5, 0.15, 0.3, 0.4, 0.2]
        operations.running.each { |op| op.temporary[:od] = test_ods.rotate![0] }
    end
    
    def check_volumes
        
    # ask tech if there is enough volume
      vol_checking = show do 
        title "Checking Volumes"
        operations.each do |op|
           select ["Yes", "No"], var: "#{op.input("Yeast Culture").item.id}", label: "Does #{op.input("Yeast Culture").item.id} have at least #{library_culture_volume(op).round(1)} mL?", default: 0
        end
      end
        
      low_vol_ops_items = []  
      operations.each do |op|
        if vol_checking["#{op.input("Yeast Culture").item.id}".to_sym] == "No"
          # delete the op from ready_ops, so we don't keep using this operation later on.
          # for example, we shouldn't delete the inputs for this operation.
          @ready_ops.delete(op)
          op.change_status("pending")
          low_vol_ops_items.push(op.input("Yeast Culture").item.id)
          #op.error :not_enough_volume, "#{op.input("Yeast Culture").item.id} didn't have enough volume. Please talk to the lab manager."
        end
      end
      
     # ask the tech to add SDO -His-Trp-Ura to items w/o enough volume and return to shaker
        if low_vol_ops_items.length > 0  
          show do
            title "Add solution and return to shaker"
            
            note "For each item in #{low_vol_ops_items}, adding 1ml of SDO -His-Trp-Ura and return to 30c shaker"
          end
        end
      
      return low_vol_ops_items.length > 0
        
    end
    
    def clean_up_pushed_back
      show do
        title "No More Operations"
        
         note "Please notify a lab manager that one or more of the operations were pushed back to pending"
      end
    end
    
end

sample_types:
  - {name: Yeast Strain, description: A strain of yeast distinguished from others by genomic or plasmid modifications}
    - {name: Parent, ftype: sample, sample_types: [Yeast Strain]}
    - {name: Integrant, ftype: sample, sample_types: [Plasmid, Fragment]}
    - {name: Plasmid, ftype: sample, sample_types: [Plasmid]}
    - {name: Integrated Marker(s), ftype: string}
    - {name: Plasmid Marker(s), ftype: string}
    - {name: Mating Type, ftype: string, choices: MATa,MATalpha,Diploid, required: true}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Comp_cell_limit, ftype: string, choices: Yes,No}
    - {name: Media, ftype: string}
    - {name: Has this strain passed QC?, ftype: string, choices: No,Yes}
    - {name: Haploids, ftype: sample, array: true, sample_types: [Yeast Strain]}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker, ftype: string, choices: Amp,Kan,Amp + Kan,Spec,Kan + Spec,Chlor,Tet,NA,Other, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS,TRP,URA,LEU,NatMX,KanMX,HygMX,BleoMX,5FOA,NA,Other, sample_types: [Primer]}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Transformation Temperature, ftype: number, choices: 37,30}
    - {name: Comp Cells, ftype: sample, sample_types: [E coli strain]}
  - {name: E coli strain, description: A strain of E coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E coli strain]}
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E coli strain, Fragment, Yeast Strain, DNA Library]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Restriction Enzyme(s), ftype: string}
    - {name: Yeast Marker, ftype: string}
    - {name: Fragment Mix Array, ftype: sample, array: true, sample_types: [Primer, Fragment]}
  - {name: Protease, description: An enzyme that digests other proteins}
    - {name: Incubation buffer id, ftype: number}
    - {name: Quench buffer id, ftype: number}
  - {name: Biotinylated Binding Target, description: A protein sample that has been biotinylated for detection with SAPE}
    - {name: Incubation buffer, ftype: sample, sample_types: [Assay Buffer]}
  - {name: Assay Buffer, description: A buffer that is tailored to a specific type of assay or experiment}
  - {name: Antibody, description: Used to label other proteins}
    - {name: Binding buffer id, ftype: number}
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object_types:
  - {name: Yeast 50ml culture, description: Culture for making comp cells, handler: sample_container, unit: Yeast Strain, release_method: dispose, sample_type_name: Yeast Strain}
  - {name: Protease Stock, description: Protease at stock concentration, handler: sample_container, unit: Protease, release_method: return, sample_type_name: Protease}
  - {name: Biotinylated Binding Target Stock, description: Biotinylated Binding Target at stock concentration, handler: sample_container, unit: Biotinylated Binding Target, release_method: return, sample_type_name: Biotinylated Binding Target}
  - {name: Antibody Stock, description: An antibody at stock concentration, handler: sample_container, unit: Antibody, release_method: return, sample_type_name: Antibody}
  - {name: Labeled Yeast Strain Suspension, description: A yeast strain that has been labeled for flow cytometry, handler: sample_container, unit: Yeast Strain, release_method: return, sample_type_name: Yeast Strain}
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operation_type: Challenge and Label
category: Yeast Display
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Culture, sample_types: [Yeast Strain, DNA Library], object_types: [Yeast 50ml culture, Yeast Library Liquid Culture], routing: YL}
  - {ftype: sample, role: input, name: Protease, sample_types: [Protease, Biotinylated Binding Target], object_types: [Protease Stock, Biotinylated Binding Target Stock], routing: P}
  - {ftype: number, role: input, name: Protease Concentration}
  - {ftype: sample, role: input, name: Antibody, sample_types: [Antibody], object_types: [Antibody Stock], routing: Ab}
  - {ftype: sample, role: output, name: Labeled Yeast Library, sample_types: [Yeast Strain, DNA Library], object_types: [Labeled Yeast Strain Suspension, Labeled Yeast Library Suspension], routing: YL}
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cost_model:
def cost(op)
  { labor: 16.121, materials: 11.74 }
end

protocol:
# @author Devin Strickland
# @email dvn.strcklnd@gmail.com

needs "Yeast Display/FastMixAndQuench"
needs "Yeast Display/WashYeast"
needs "Yeast Display/NormalizeCultureDensity"
needs "Yeast Display/PrepareTreatmentDilutions"
needs "Yeast Display/LabelWithAntibody"

needs "Yeast Display/ChallengeAndLabelHelper"

class Protocol

    require 'json'

    include FastMixAndQuench, WashYeast, NormalizeCultureDensity, PrepareTreatmentDilutions, LabelWithAntibody
    include ChallengeAndLabelHelper

    attr_accessor :plan_params

    MY_DEBUG = true

    ########## DEFAULT PARAMS ##########

    # Params that are applied equally to all operations. Can be overridden by
    #   associating a list of key, value pairs to the `Plan`.
    #
    # @example my_plan.associate("options", "{"od_ml_needed": 2.0}")
    # @note `:od_ml_needed` should not exceed `3.0`
    # @note `:quench_milliliters`, `:wash_milliliters` should not exceed `1000`
    # @note If `:incubate_with_protease` is `false`, then the protease incubation steps
    #   will be skipped, but `:n_protease_washes` washes will still be performed
    # @note If `:incubate_with_antibody` is `false`, then the antibody incubation steps
    #   will be skipped, but `:n_antibody_washes` washes will still be performed
    def default_plan_params
        {
            make_extra_reagent: 1.1,                # Multiplier to make extra master mix for pipetting error
            od_ml_needed: 2.5,                      # The number of ml of an OD = 1.0 culture, 1.0 = 1.2E7 cells
            assay_microliters: 500,                 # Total volume after protease is added
            protease_dilution_factor: 2.0,          # Protease sample is diluted when mixed with the culture
            protease_working_microliters: 1000,     # How much of each protease sample gets made
            protease_incubation_time_minutes: 5,    # How long the protease incubation is allowed to proceed
            vortex_interval_minutes: 2,             # How often the protease incubation is vortexed
            quench_milliliters: 1.0,                # The volume used to quench the protease reaction
            wash_milliliters: 1.0,                  # The volume used in each protease or antibody wash
            n_protease_washes: 4,                   # The number of times to wash after protease treatment
            antibody_dilution_factor: 100.0,        # The amount that the antibody gets diluted by
            n_antibody_washes: 2,                   # The number of times to wash after antibody treatment
            antibody_microliters_per_od_ml: 200,    # The volume of diluted antibody, scales with # of cells
            incubate_with_protease: true,           # Skips incubation but NOT washes if false
            quench_protease: true,                  # Skips quench step but NOT washes if true
            incubate_with_antibody: true,           # Skips incubation AND washes if false
            pretreatment_item_id: nil,
            pretreatment_incubation_time_minutes: nil,
            pretreatment_dilution_factor: nil
        }
    end

    ########## MAIN ##########

    def main

        # Setup that runs in the background
        # These methods should only call show blocks in debug mode

        override_input_operations if debug && MY_DEBUG

        @plan_params = default_plan_params

        update_plan_params

        calculate_volumes

        sort_operations

        operations.make

        find_and_add_buffers

        associate_tube_labels

        calculate_and_set_protease_volumes

        # Technician display methods begin here

        prepare_equipment

        gather_buffers_and_proteases

        prepare_pretreatment if @plan_params[:pretreatment_item_id]

        prepare_culture_samples

        incubate_with_pretreatment if @plan_params[:pretreatment_item_id]

        if @plan_params[:incubate_with_protease]
            prepare_protease_dilutions
            incubate_with_protease
        end

        if @plan_params[:n_protease_washes] > 0
            wash_out_protease
        end

        if @plan_params[:incubate_with_antibody]
            label_with_antibody
        end

        if @plan_params[:n_antibody_washes] > 0
            wash_out_antibody
        end

        clean_up

        return {}

    end

    def prepare_pretreatment
        pretreatment_item = Item.find(@plan_params[:pretreatment_item_id])

        operations.each { |op| add_input_from_item(op, PRETREATMENT, pretreatment_item) }

        final_dilution_factor = @plan_params[:assay_qty][:qty] / @plan_params[:library_qty][:qty]
        working_dilution_factor = @plan_params[:pretreatment_dilution_factor] / final_dilution_factor

        total_per_rxn = @plan_params[:library_qty][:qty] * @plan_params[:make_extra_reagent]

        stock_per_rxn = {
            qty: total_per_rxn / working_dilution_factor,
            units: @plan_params[:assay_qty][:units]
        }

        buffer_per_rxn = {
            qty: total_per_rxn - stock_per_rxn[:qty],
            units: @plan_params[:assay_qty][:units]
        }

        prepare_reagent(
            stock_per_rxn: stock_per_rxn,
            buffer_per_rxn: buffer_per_rxn,
            reagent_name: pretreatment_item.sample.name,
            reagent_handle: PRETREATMENT,
            buffer_handle: INCUBATION_BUFFER,
            temp: ROOM_TEMP,
            debug: debug && MY_DEBUG
        )
    end

    def incubate_with_pretreatment
        incubation_time = @plan_params[:pretreatment_incubation_time_minutes]
        incubation_time = "#{incubation_time} #{MINUTES}"
        show do
            title "Incubate Resuspended Cultures"

            note "Incubate the resuspended library cultures for #{incubation_time}."
        end
    end

    ########## DISPLAY METHODS WITH DEDICATED MODULES ##########

    # Retrieve the cultures, measure the ODs, centrifuge and resuspend in the appropriate volume.
    #
    def prepare_culture_samples

        operations.retrieve(only: INPUT_YEAST)

        unique_culture_operations = normalize_culture_density(
            input_handle: INPUT_YEAST,
            output_handle: OUTPUT_YEAST,
            buffer_handle: INCUBATION_BUFFER,
            temp: ROOM_TEMP,
            resuspend_qty: @plan_params[:library_qty],
            od_ml_needed: @plan_params[:od_ml_needed],
            debug: debug && MY_DEBUG
        )

        uc_items = unique_culture_operations.map { |op| op.input(INPUT_YEAST).item }

        mark_cultures_for_discard(uc_items)

        release(uc_items, interactive: true)

    end

    def prepare_protease_dilutions
        prepare_treatment_dilutions(
            treatment_handle: PROTEASE,
            buffer_handle: INCUBATION_BUFFER,
            output_handle: OUTPUT_YEAST,
            treatment_working_qty: @plan_params[:protease_working_qty],
            temp: ROOM_TEMP
        )
    end

    def incubate_with_protease
        grouped_ops = ops_by_inc_bfr

        arrange_tubes(
            grouped_ops: grouped_ops,
            output_handle: OUTPUT_YEAST,
            temp: ROOM_TEMP
        )

        mix_samples(
            grouped_ops: grouped_ops,
            treatment_vol: @plan_params[:protease_qty]
        )

        incubate(
            grouped_ops: grouped_ops,
            output_handle: OUTPUT_YEAST,
            incubation_time: @plan_params[:protease_incubation_time_qty],
            vortex_interval: @plan_params[:vortex_interval_qty],
            quench_vol: @plan_params[:quench_qty],
            buffer_handle: QUENCH_BUFFER,
            quench_protease: @plan_params[:quench_protease]
        )
    end

    def wash_out_protease
        buffer_handle = @plan_params[:quench_protease] ? QUENCH_BUFFER : INCUBATION_BUFFER
        wash_yeast(
            grouped_ops: ops_by_inc_bfr,
            n_washes: @plan_params[:n_protease_washes],
            wash_vol: @plan_params[:wash_qty],
            output_handle: OUTPUT_YEAST,
            buffer_handle: buffer_handle,
            temp: ON_ICE
        )
    end

    def label_with_antibody
        prepare_reagent(
            stock_per_rxn: @plan_params[:antibody_stock_per_rxn],
            buffer_per_rxn: @plan_params[:antibody_buffer_per_rxn],
            reagent_name: 'antibody',
            reagent_handle: ANTIBODY,
            buffer_handle: BINDING_BUFFER,
            debug: debug && MY_DEBUG
        )

        incubate_with_antibody(
            antibody_qty: @plan_params[:antibody_qty]
        )
    end

    def wash_out_antibody
        wash_yeast(
            grouped_ops: ops_by_binding_bfr,
            n_washes: @plan_params[:n_antibody_washes],
            wash_vol: @plan_params[:wash_qty],
            output_handle: OUTPUT_YEAST,
            buffer_handle: BINDING_BUFFER,
            temp: ON_ICE
        )
    end

    ########## DATA PROCESSING METHODS ##########

    # Gets :options from the plan associations and uses it to override @plan_params defaults.
    #
    # @note Modifies @plan_params, an instance variable of the Protocol.
    def update_plan_params
        opts = operations.first.plan.associations[:options]

        if opts.present?
            opts = JSON.parse(opts, { symbolize_names: true })
            plan_params.update(opts)
        end

        if debug && MY_DEBUG
            associate_plan_options(plan_params)
        end
    end

    # Calculates volume @plan_params and formats them for display purposes.
    #
    # @note Modifies @plan_params, an instance variable of the Protocol.
    def calculate_volumes
        # TODO: Think about whether this is the right priority for these params being defined
        # Devin removed this calculation because it results in too much culture volume. No longer
        # automatically scaling reaction volume with OD*ml
        # assay_microliters = @plan_params[:assay_microliters_per_od_ml] * @plan_params[:od_ml_needed]
        # @plan_params[:assay_microliters] = assay_microliters

        @plan_params[:protease_microliters] = @plan_params[:assay_microliters] / @plan_params[:protease_dilution_factor]
        @plan_params[:library_microliters] = @plan_params[:assay_microliters] - @plan_params[:protease_microliters]
        @plan_params[:antibody_microliters] = @plan_params[:antibody_microliters_per_od_ml] * @plan_params[:od_ml_needed]

        # Takes _microliters and _milliliters keys and generates _vol keys for display purposes.
        @plan_params = add_qty_display(@plan_params)

        @plan_params[:antibody_stock_per_rxn] = {
            qty: @plan_params[:antibody_qty][:qty] / @plan_params[:antibody_dilution_factor],
            units: @plan_params[:antibody_qty][:units]
        }

        @plan_params[:antibody_buffer_per_rxn] = {
            qty: @plan_params[:antibody_qty][:qty] - @plan_params[:antibody_stock_per_rxn][:qty],
            units: @plan_params[:antibody_qty][:units]
        }

        @plan_params[:antibody_stock_per_rxn][:qty] *= @plan_params[:make_extra_reagent]
        @plan_params[:antibody_buffer_per_rxn][:qty] *= @plan_params[:make_extra_reagent]

        @plan_params
    end

    # Loops over the operations and calls a method to find and add buffers.
    #
    def find_and_add_buffers
        operations.each do |op|
            protease = op.input(PROTEASE).sample
            add_buffers(op, protease, INCUBATION_BUFFER)
            add_buffers(op, protease, QUENCH_BUFFER)

            antibody = op.input(ANTIBODY).sample
            add_buffers(op, antibody, BINDING_BUFFER)
        end
    end

    # Figures out which buffers are needed and adds them to the passed operation.
    #
    def add_buffers(op, reagent, handle)
        sample_id = reagent.properties["#{handle} id"]

        if sample_id
            buffer = Sample.find(sample_id)
        else
            buffer = reagent.properties["#{handle}"]
        end

        return unless buffer
        container = buffer_container(buffer: buffer, handle: handle)
        item = op.add_input(handle, buffer, container)
    end

    # Calculates and sets operation-specific protease volumes based on the activities of the stocks.
    #
    def calculate_and_set_protease_volumes
        protease_samples.each do |protease|
            protease_ops = operations.select { |op| op.input(PROTEASE).sample == protease }
            stock_conc = stock_concentration(ops: protease_ops)
            protease_ops.each { |op| set_protease_volumes(op, stock_conc) }
        end
    end

    def stock_concentration(ops: protease_ops)
        concs = ops.map { |op| op.input(PROTEASE).item.get(:units_per_milliliter) }.uniq
        raise 'Protease activity error.' unless concs.length == 1
        concs.first.to_i
    end

    def protease_ops(protease)
        operations.select { |op| op.input(PROTEASE).sample == protease }
    end

    # Sets protease and buffer volumes for the passed operation.
    #
    # @param op [Operation] the operation that the columes are set for
    # @param stock_conc [Numeric] the activity of the protease stock
    def set_protease_volumes(op, stock_conc)
        this_conc = protease_conc(op) * @plan_params[:protease_dilution_factor]
        prot_vol = @plan_params[:protease_working_qty][:qty] * this_conc / stock_conc
        buf_vol = @plan_params[:protease_working_qty][:qty] - prot_vol
        op.temporary[:treatment_qty] = prot_vol
        op.temporary[:buffer_qty] = buf_vol
    end

    # Assigns an incremental tube number for each yeast culture and protease.
    # Overrides the `associate_tube_labels` in the `TemporaryTubeLabels` module.
    def associate_tube_labels
        operations.each_with_index do |op, i|
            op.output(OUTPUT_YEAST).item.associate(:sample_tube_label, "S#{i + 1}")
            op.output(OUTPUT_YEAST).item.associate(:treatment_tube_label, "T#{i + 1}")
        end

        # check_labels if debug
    end

end

sample_types:
  - {name: Media, description: Media for yeast and E. coli}
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object_types:
  - {name: Yeast 5ml culture, description: A 5 ml yeast culture in a 15 ml glass culture tube, handler: sample_container, unit: Yeast Strain, release_method: return, sample_type_name: Yeast Strain}
  - {name: 800 mL Liquid, description: 800 mL Bottle, handler: sample_container, data: { "samples": [ { "name": "SC", "materials": 0.0135, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "SDO", "materials": 0.014, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "50% Glycerol", "materials": 0.02, "labor": 0.02, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "TB", "materials": 0.01, "labor": 0.016, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "TB + Amp", "materials": 0.03, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "LB", "materials": 0.01, "labor": 0.016, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "YPAD", "materials": 0.01, "labor": 0.025, "delete": false, "unit": "mL", "total_volume": 800 } ] }, unit: Media, release_method: return, sample_type_name: Media}
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operation_type: Dilute Yeast Library
category: Yeast Display
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Culture, sample_types: [Yeast Strain, DNA Library, Yeast Strain], object_types: [Yeast 5ml culture, Yeast Library Liquid Culture, Yeast 50ml culture], routing: YL}
  - {ftype: sample, role: input, name: Media, sample_types: [Media], object_types: [800 mL Liquid], routing: M}
  - {ftype: sample, role: output, name: Yeast Culture, sample_types: [Yeast Strain, DNA Library], object_types: [Yeast 50ml culture, Yeast Library Liquid Culture], routing: YL}
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cost_model:
def cost(_op)
  { labor: 4.012, materials: 2.86 }
end

protocol:
# Devin Strickland
# dvn.strcklnd@gmail.com

needs "Yeast Display/YeastDisplayShows"
needs "Yeast Display/YeastDisplayHelper"
needs "Standard Libs/Debug"
needs "Standard Libs/SortHelper"

class Protocol

    include YeastDisplayShows, YeastDisplayHelper, Debug, SortHelper

    def main
        
        # DO NOT DELETE 
        ops_sorted=sortByMultipleIO(operations, ["in"], [INPUT_YEAST], ["id"], ["item"])
        operations=ops_sorted
        
        operations.retrieve
        
        group_ops_by_container.each do |container, container_group|
            container_group.make
            prepare_media_and_dilute(container, container_group)
        end
        
        return_to_incubator
        
        mark_cultures_for_discard(operations.map { |op| op.input(INPUT_YEAST).item })
        
        operations.store
        
        # DO NOT DELETE 
        operations.each { |op|
            if( !(op.input(INPUT_YEAST).item.get(:bin).nil?) ) # sorted sample
                op.output(OUTPUT_YEAST).item.associate(:bin, op.input(INPUT_YEAST).item.get(:bin))
            end
        }
        operations.store
        
    end

end

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object_types:
  - {name: Yeast Plate, description: Yeast Plate, handler: sample_container, unit: Yeast Strain, release_method: return, prefix: DFP, sample_type_name: Yeast Strain}
  - {name: Yeast Library Glycerol Stock, description: A special case of glycerol stock that contains a strain library., handler: sample_container, unit: DNA Library, release_method: dispose, prefix: M80, sample_type_name: DNA Library}
  - {name: Divided Yeast Plate, description: Divided Yeast Plate, handler: collection, unit: plate, release_method: return, prefix: DFP, rows: 1, columns: 4}
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operation_type: Innoculate Yeast Library
category: Yeast Display
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Culture, sample_types: [Yeast Strain, DNA Library, DNA Library, Yeast Strain], object_types: [Yeast Plate, Yeast Library Glycerol Stock, Labeled Yeast Library Suspension, Divided Yeast Plate], routing: YL}
  - {ftype: sample, role: input, name: Media, sample_types: [Media], object_types: [800 mL Liquid], routing: M}
  - {ftype: sample, role: output, name: Yeast Culture, sample_types: [Yeast Strain, DNA Library], object_types: [Yeast 5ml culture, Yeast Library Liquid Culture], routing: YL}
  - {ftype: json, role: input, name: Options}
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precondition:
require 'date'
require 'json'

def precondition(op)
    return true unless op.input('Options')
    
    opts = JSON.parse(op.input('Options').value, { symbolize_names: true })
    
    return true unless opts[:delay_until]
    
    if opts[:delay_until] =~ /\d{2}\/\d{2}\/\d{2}/
        frmt = "%m/%d/%y"
    elsif opts[:delay_until] =~ /\d{4}-\d{2}-\d{2}/
        frmt = "%Y-%m-%d"
    else
        return true
    end
    
    Time.now >= Time.strptime(opts[:delay_until], frmt)
end

cost_model:
def cost(op)
   if (op.output("Yeast Culture").object_type.try(:name) == "Yeast 5ml culture")
     { labor: 4.012, materials: 0.7 }
   elsif (op.output("Yeast Culture").object_type.try(:name) == "Yeast Library Liquid Culture")
     { labor: 4.012, materials: 2.06 }
   end
   
end

protocol:
# Devin Strickland
# dvn.strcklnd@gmail.com

needs "Yeast Display/YeastDisplayShows"
needs "Yeast Display/YeastDisplayHelper"
needs "Standard Libs/SortHelper"

class Protocol

    include YeastDisplayShows, YeastDisplayHelper, SortHelper

    INPUT_YEAST = 'Yeast Culture'

    def main

        # DO NOT DELETE SORT BY ID
        ops_sorted=sortByMultipleIO(operations, ["in"], [INPUT_YEAST], ["id"], ["item"])
        operations=ops_sorted

        set_test_labels(operations.map { |op| op.input(INPUT_YEAST).item }) if debug

        group_ops_by_container.each do |container, container_group|
            container_group.retrieve.make
            prepare_media_and_dilute(container, container_group)
        end

        return_to_incubator

        input_items = operations.map { |op| op.input(INPUT_YEAST).item }

        discards = input_items.reject { |i| i.object_type.name =~ /(plate|glycerol)/i }

        mark_cultures_for_discard(discards)

        glycerol_stocks = input_items.select { |i| i.object_type.name =~ /(Yeast Library Glycerol Stock)/i }
        glycerol_stocks.map { |i| i.mark_as_deleted }

        show do
            title "Throw Away Glycerol Stocks"

            note "Throw away all the <b>empty</b> glycerol stocks (#{glycerol_stocks.map { |i| i.to_s }.to_sentence})."
        end

        operations.store

        # DO NOT DELETE
        operations.each { |op|
            if( !(op.input(INPUT_YEAST).item.get(:bin).nil?) ) # sorted sample
                op.output(OUTPUT_YEAST).item.associate(:bin, op.input(INPUT_YEAST).item.get(:bin))
            end
        }

        # library glycerol stocks need to be deleted
    end

end

operation_type: Mass Plan Data Upload
category: Yeast Display
deployed: false
on_the_fly: false
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precondition:
def precondition(operation)
  # this protocol only begins if all other operations in the plan have completed
  all_ops = operation.plan.operations - [operation]
  if all_ops.empty? || !(all_ops.all? { |op| op.status == 'done' || op.status == 'error'})
    operation.associate("Waiting on rest of plan", "This operation is meant to be run after all other operations in the plan are finished")
    return false
  else
    operation.get_association("Waiting on rest of plan").delete if operation.get_association("Waiting on rest of plan")
    return true
  end
end

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protocol:
class Protocol

  def main
    data_associations = []
    operations.each do |op|
        jobs = jobs_from_plan(op.plan)
        
        show do
          title "Access Network Drive"
          note "Open a connection to the samba share drive where the experimental results live"
          warning "smb://128.95.114.54"
        end
        
        jobs.each do |j|
          op_type = j.operations.first.operation_type.name 
          if op_type == 'Sort Yeast Display Library'
              data_associations.concat(lazy_associate_fcs_uploads(j, "fcs_measurement", get_fcs_uploads(j))) # gets uploads, makes new associations from uploads, concats these associations to complete association list
          end
        end
        
        show do
          title "Sorting Files"
          note "Next we will upload the sorting files for each job."
          note "You will need to manually inspect the contents of some files before uploading"
          note "To make this easier, open \"128.95.114.54/Data/Aria/dstrickland/Sort Reports\" in a seperate file window where you can click around and open files"
        end
        
        jobs.each do |j|
          op_type = j.operations.first.operation_type.name 
          if op_type == 'Sort Yeast Display Library'
              data_associations.concat(lazy_associate_sorting_uploads(j, "sort_report", get_sorting_uploads(j)))
          end
        end
    end
    DataAssociation.import data_associations, on_duplicate_key_update: [:object] unless data_associations.empty?
  end
  
  def get_fcs_uploads(j)
    id = j.id
    date = j.updated_at.strftime('%d%m%Y')
    resp = show do
      title "Locate FCS Files"
      note "On the Samba drive:"
      bullet "Navigate to the shared folder: 128.95.114.54/Data/Aria/dstrickland"
      bullet "Within that folder, navigate to the sub folder with name #{date}"
      bullet "Within that folder, ensure that the only folder inside has the filename: Job_#{id}, open up this innermost folder"
      check "Now upload all FCS measurement files related to job #{id}"
      upload var: "fcs_uploads"
    end
    
    resp.get_response(:fcs_uploads)
  end
  
  def get_sorting_uploads(j)
    id = j.id
    date = j.updated_at
    resp = show do
      title "Locate Sorting xml files"
      note "On the Samba drive, through a seperate file explorer window:"
      bullet "Navigate to the shared folder: 128.95.114.54/Data/Aria/dstrickland/Sort Reports"
      bullet "within that folder, navigate to the sub folder with the date accessed: #{date}"
      bullet "within that folder, open any of the .xml files, ensure that somewhere on one of the first few lines of the file it says: \"Job_#{id}\""
      check "Now open that same folder address with the upload selector and upload all XML files related to job #{id}"
      upload var: "sorting_uploads"
    end
    
    resp.get_response(:sorting_uploads)
  end
  
  def lazy_associate_fcs_uploads(j, key_prefix, data_uploads)
    das = []
    if data_uploads
      j.operations.each do |op|
        data_uploads.each_with_index do |up|
          tube_id = op.output("Labeled Yeast Library").item.get("software_tube_id")
          if (up.name.include? tube_id)
            (op.inputs).each do |fv|
              das << lazy_associate2(fv.item, key_prefix, {}, up) if fv.item
            end
            das << lazy_associate2(op, key_prefix, {}, up)
          end
        end
      end
    end
    das
  end
  
  def lazy_associate_sorting_uploads(j, key_prefix, data_uploads)
    das = []
    if data_uploads
      j.operations.each do |op|
        data_uploads.each_with_index do |up|
          tube_id = op.output("Labeled Yeast Library").item.get("software_tube_id")
          if (up.name.include? tube_id) || (open(up.url).read.include? tube_id)
            das << lazy_associate2(op, key_prefix, {}, up)
          end
        end
      end
    end
    das
  end
  
  def jobs_from_plan(plan)
    plan.operations.map { |op| op.jobs.last }.uniq
  end
  
  def lazy_associate2(op, key, value, upload = nil)
   da = DataAssociation.new(
    parent_id: op.id,
    parent_class: op.class.to_s,
    key: key.to_s,
    object: { key => value }.to_json,
    upload_id: upload ? upload.id : nil
  )
  end
end

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operation_type: Mix Cultures
category: Yeast Display
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Component Yeast Culture, sample_types: [DNA Library], object_types: [Yeast Library Liquid Culture], array: true}
  - {ftype: json, role: input, name: Proportions}
  - {ftype: sample, role: output, name: Yeast Culture, sample_types: [DNA Library], object_types: [Yeast Library Liquid Culture]}
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cost_model:
def cost(_op)
  { labor: 13.95, materials: 0.23 }
end

protocol:
# frozen_string_literal: true

# @author Devin Strickland
# @email dvn.strcklnd@gmail.com

needs 'Yeast Display/YeastDisplayHelper'
needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/Debug'

class Protocol
  include AssociationManagement
  include Debug
  include PartProvenance
  include YeastDisplayHelper

  INPUT_YEAST = 'Component Yeast Culture'
  PROPORTIONS = 'Proportions'

  def main
    operations.retrieve.make
    discard_items = []

    operations.each do |op|
      discard_items += operation_mix(op)
    end

    discard_items.uniq!
    mark_cultures_for_discard(discard_items)
    release(discard_items, interactive: true)
  end

  def operation_mix(operation)
    input_cultures = operation.input_array(INPUT_YEAST).items
    proportions = operation.input(PROPORTIONS).value.scan(/[\d\.]+/)

    mix_table = create_mix_table(cultures: input_cultures,
                                 proportions: proportions)
    show_mix(mix_table)
    add_culture_provenance(cultures: input_cultures,
                           culture_mix: operation.output('Yeast Culture').item,
                           proportions: proportions)

    input_cultures
  end

  def create_mix_table(cultures:, proportions:)
    mix_table = [["#{INPUT_YEAST} Item ID", PROPORTIONS]]
    culture_ids = cultures.map(&:id)

    mix_table + [culture_ids, proportions].transpose
  end

  def show_mix(mix_table)
    # TODO: make "not very different" more exact
    # TODO: be more detailed about how to do proportional mixing
    show do
      title 'Mix cultures'

      note 'Inspect the cultures to make sure the ODs are not very different'
      note 'If they are very different, then dilute the higher density ' \
           'culture to the same OD as the lower density one'
      note 'Once the ODs are close, mix the cultures according to the ' \
           'following proportions'
      table mix_table
    end
  end

  # Adds provenance to the input and output cultures for this Mix Cultures.
  # Includes the proportion of each input in the mix as an attribute.
  #
  # @param cultures [Array<Item>]  the array of input cultures
  # @param culture_mix [Item]  the output culture
  # @param proportions [Array<Float>]  the proportion array
  def add_culture_provenance(cultures:, culture_mix:, proportions:)
    mix_associations = AssociationMap.new(culture_mix)
    cultures.each_with_index do |culture, index|
      culture_associations = AssociationMap.new(culture)
      proportion = { proportion: proportions[index] }
      add_provenance(from: culture, from_map: culture_associations,
                     to: culture_mix, to_map: mix_associations,
                     additional_relation_data: proportion)
      culture_associations.save
    end
    mix_associations.save
  end
end

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operation_type: Sort Yeast Display Library
category: Yeast Display
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Labeled Yeast Library, sample_types: [Yeast Strain, DNA Library], object_types: [Labeled Yeast Strain Suspension, Labeled Yeast Library Suspension], routing: YL}
  - {ftype: sample, role: output, name: Labeled Yeast Library, sample_types: [Yeast Strain, DNA Library], object_types: [Labeled Yeast Strain Suspension, Labeled Yeast Library Suspension], routing: YL}
  - {ftype: string, role: input, name: Control?, choices: no,autofluorescence,high-fitc,high-pe,protease}
  - {ftype: string, role: input, name: Sort?, choices: no,yes}
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cost_model:
def cost(_op)
  { labor: 16.94, materials: 9.83 }
end

protocol:
# Devin Strickland
# dvn.strcklnd@gmail.com

needs "Yeast Display/YeastDisplayHelper"
needs "Standard Libs/Debug"
needs "Standard Libs/PlanParams"
needs "Flow Cytometry/SonySH800S"
needs "Flow Cytometry/BDAriaIII"

class Protocol

    include Debug, PlanParams
    include Cytometers::SonySH800S, Cytometers::BDAriaIII
    include YeastDisplayHelper

    attr_accessor :now_sorting, :tube_ct

    INPUT_YEAST = 'Labeled Yeast Library'
    OUTPUT_YEAST = 'Labeled Yeast Library'

    RESUSPENSION_BUFFER = 'PBSF'

    MICROFUGE_TUBE = '1.5 ml microfuge tube'
    COLLECTION_TUBE = '15 ml polypropylene conical tube'
    SAMPLE_TUBE = '5 ml polystyrene round-bottom tube'

    CALIBRATION_BEADS = "SpheroTech ultra rainbow"
    CALIBRATION_BEAD_VOLUME = { qty: 250, units: MICROLITERS }
    CALIBRATION_BEADS_LABEL = 'beads'
    BEAD_CAP_COLORS = ['brown', 'white']

    AUTOFLUORESCENCE_CONTROL = 'autofluorescence'
    HIGH_FITC_CONTROL = 'high-fitc'
    HIGH_PE_CONTROL = 'high-pe'
    PROTEASE_CONTROL = 'protease'

    CONTROL_NAMES = [AUTOFLUORESCENCE_CONTROL, HIGH_FITC_CONTROL, HIGH_PE_CONTROL, PROTEASE_CONTROL]

    DEFAULT_TEMPLATES = {
        stability: 'protstab template V1',
        protein_binding: 'binding template V1'
    }

    ########## DEFAULT PARAMS ##########

    # Params that are applied equally to all operations. Can be overridden by
    #   associating a list of key, value pairs to the `Plan`.
    #
    # @example my_plan.associate("options", "{"od_ml_needed": 2.0}")
    def default_plan_params
        {
            experiment_template:                DEFAULT_TEMPLATES[:stability],
            events_to_record:                   30000,
            default_to_sort:                    12E6.to_i,
            facs_model:                         Cytometers::SonySH800S::CYTOMETER_NAME,
            run_calibration_beads:              false,
            library_resuspension_milliliters:   2.0
        }
    end

  ########## MAIN ##########

    def main

        @plan_params = update_plan_params(
            plan_params: default_plan_params,
            opts: get_opts(operations)
        )

        # Takes _microliters and _milliliters keys and generates _vol keys for display purposes.
        @plan_params = add_qty_display(@plan_params)

        @plan = operations.first.plan

        if debug
            @plan.associate(:rounds_complete, 0)
            inspect rounds_complete
        end

        @now_sorting = false
        @tube_ct = 0
        @beads = produce_beads if @plan_params[:run_calibration_beads]

        operations.retrieve.make

        set_test_conditions if debug

        operations.each { |op| txfr_tube_labels(op, INPUT_YEAST, OUTPUT_YEAST) }

        get_facs(@plan_params[:facs_model])

        prepare_materials

        go_to_facs_and_login

        job = get_job

        set_up_instrument(
            experiment_name: "Job_#{job.id}",
            template: @plan_params[:experiment_template],
            events_to_record: @plan_params[:events_to_record],
            target_events: target_events(
                default_to_sort: @plan_params[:default_to_sort],
                frac_positive: 0.1
            ),
            args: { left_gate: sort_gate_name }
        )

        all_samples = collect_samples

        show_debug_table(samples: all_samples) if debug

        run_all(samples: all_samples)

        shutdown

        @plan.associate(:rounds_complete, rounds_complete + 1)

        if debug
            inspect rounds_complete
            operations.each do |op|
                inspect op.output(OUTPUT_YEAST).item.associations
            end
        end

        spin_down_samples

        items_to_delete = operations.map { |op| op.input(INPUT_YEAST).item }
        items_to_delete += operations.reject { |op| sort?(op) }.map { |op| op.output(OUTPUT_YEAST).item }
        items_to_delete.each { |i| i.mark_as_deleted }

        discard_input_samples

        operations.store(interactive: false)

        return {}

    end

    ########## SAMPLE CONTROL FLOW ##########

    def run_all(samples:)
        prev_item = nil

        samples.each do |sample|
            item = sample[:item]
            sort = sample[:sort]
            control = sample[:control]

            tube_label = sample_tube_label(item)
            resuspend_pellet(item) unless item.associations[:resuspended]

            if @now_sorting
                remove_tube_from_sorter(item: prev_item, collection_tube: COLLECTION_TUBE)
                @now_sorting = false
            end

            remove_sample_tube(sample_tube: SAMPLE_TUBE) if @tube_ct > 0
            @tube_ct += 1 unless item.associations[:software_tube_id]
            set_and_run_tube(item: item, tube_label: tube_label, tube_ct: @tube_ct, sort: sort)

            if control
                check_gates(
                    control: control,
                    experiment_template: @plan_params[:experiment_template]
                )
            end

            if sort
                sort_tube(
                    item: item,
                    tube_label: tube_label,
                    default_to_sort: @plan_params[:default_to_sort],
                    gate_name: sort_gate_name,
                    debug: debug
                )
                @now_sorting = true
            end

            mark_as_data_collected(item)
            prev_item = item
        end

        remove_tube_from_sorter(item: prev_item, collection_tube: COLLECTION_TUBE) if @now_sorting
        remove_sample_tube(sample_tube: SAMPLE_TUBE)
    end

    ########## SHOW METHODS ##########

    def prepare_materials

        show do
            title "Gather dry materials"

            # Make this more specific for the Sony.
            note "Put these items in a small box."
            check "#{operations.length} #{SAMPLE_TUBE}."
            warning "You must use #{required_sample_tube}!" if required_sample_tube

            check "A 1000 or 1200 ul pipettor."
            check "A box of blue pipet tips."
        end

        sorted_ops = operations.sort_by { |op| sample_tube_label(op, OUTPUT_YEAST) }.extend(OperationList)

        show do
            title "Gather cold materials"

            note "Pack #{operations.length} tubes containing cell pellets on ice in a bucket or small cooler."
            table sorted_ops.start_table
                .custom_column(heading: "Tube label", checkable: true) { |op| sample_tube_label(op, OUTPUT_YEAST) }
                .end_table

            check "Pack a bottle of #{RESUSPENSION_BUFFER} in the cooler. You will need at least #{operations.length * 4} ml."
        end

        show do
            title "Prepare collection tubes"

            note "Get #{libraries_to_sort.length} #{COLLECTION_TUBE}."
            note "Place the tubes in the ice bucket."
        end

        if @plan_params[:run_calibration_beads]
            show do
                title "Prepare calibration beads"

                note "Take one #{SAMPLE_TUBE} and label it \"#{CALIBRATION_BEADS_LABEL}\"."
                note "Pipet #{qty_display(CALIBRATION_BEAD_VOLUME)} #{RESUSPENSION_BUFFER} into the tube."
                note "Get the #{CALIBRATION_BEADS} from the refrigerator."

                BEAD_CAP_COLORS.each do |color|
                    note "Add <b>two drops</b> from the <b>#{color}</b>-capped tube to the tube."
                end

                note "After adding the beads, vortex the tube for 3 Mississippi."
                note "Add the prepared beads to the cooler."
            end

            mark_as_resuspended(@beads)
        end

    end

    # TODO: Need to make this specific for Sony.
    def resuspend_pellet(item)
        tube_label = sample_tube_label(item)
        resuspension_qty = @plan_params[:library_resuspension_qty]

        show do
            title "Resuspend #{tube_label}"

            note "Take a clean #{SAMPLE_TUBE} and label it as \"#{tube_label}.\""
            note "Remove the cap from the #{SAMPLE_TUBE} and place the tube in the ice bucket."

            note "Take the #{MICROFUGE_TUBE} labeled #{tube_label} from the ice bucket."

            if resuspension_qty[:units] == MILLILITERS && resuspension_qty[:qty] > 1.0
                remainder = resuspension_qty.dup
                remainder[:qty] -= 1.0

                note "Pipet 1.0 #{MILLILITERS} #{RESUSPENSION_BUFFER} into the tube."
                note "Gently pipet the #{RESUSPENSION_BUFFER} up and down until " \
                        "the pellet is fully resuspended."
                note "Pipet the resuspended yeast from the #{MICROFUGE_TUBE} to the #{SAMPLE_TUBE}."
                note "Pipet an additional #{qty_display(remainder)}  " \
                        "#{RESUSPENSION_BUFFER} into the  #{SAMPLE_TUBE}."
            else
                note "Pipet #{qty_display(resuspension_qty)} #{RESUSPENSION_BUFFER} into the tube."
                note "Gently pipet the #{RESUSPENSION_BUFFER} up and down until " \
                        "the pellet is fully resuspended."
                note "Pipet the resuspended yeast from the #{MICROFUGE_TUBE} to the #{SAMPLE_TUBE}."
            end

        end

        mark_as_resuspended(item)
    end

    def spin_down_samples
        show do
            title "Go back to the lab"
            note "Pack up your things and go back to the lab."
            note "Keep the #{COLLECTION_TUBE}s on ice as you travel."
        end

        show do
            title "Centrifuge samples"

            note "Make sure the #{COLLECTION_TUBE}s are balanced by adding #{RESUSPENSION_BUFFER}."
            note "Spin for 5 minutes at 4696 RCF (x g) in a swinging bucket centrifuge."
            note "Using the aspirator with a sterile tip, remove all but the last 100 µl of buffer."
            note "You can discard everything except these collecton tubes."
            warning "Go immediately to the next protocol."
        end
    end

    def check_gates(control:, experiment_template:)
        case control
        when AUTOFLUORESCENCE_CONTROL
            # if experiment_template == DEFAULT_TEMPLATES[:protein_binding]
            #     show do
            #         title 'Adjust the All Events gate'

            #         note "In the All Events (BSC-A vs. FSC-A) plot, move the " \
            #                 "ellipse so that it just includes all of the events in " \
            #                 "lower-left end of the major mass."
            #         # image path_to('all_events')
            #     end
            # end

            show do
                title 'Adjust the lower FITC gate limit'

                note "In the FITC histogram, adjust the lower gate limit so that the percentage is " \
                        "between 0.1 and 0.5."
                image path_to('fitc_autofluorescence')
            end

            if experiment_template == DEFAULT_TEMPLATES[:protein_binding]
                show do
                    title 'Adjust the lower PE gate limit'

                    note "In plot D, move the polygon up or down so that the " \
                            "percentage is between 0.01 and 0.05." \
                    # image path_to('all_events')
                end
            end

        when HIGH_FITC_CONTROL
            show do
                title 'Verify / adjust the upper FITC gate limit'

                note "In the FITC histogram, verify that the upper gate includes the entire " \
                        "right-hand tail of the distribution. Adjust if needed."
                # image path_to('fitc_autofluorescence')
            end
        end
    end

    def discard_input_samples
        show do
            title "Discard Input Samples"

            note "Discard all the #{MICROFUGE_TUBE}s and #{SAMPLE_TUBE}s."
            warning "Keep the #{COLLECTION_TUBE}s that you sorted into in the ice bucket."
        end
    end

    ########## LABELS, GETTERS, AND SIMPLE CALCULATIONS ##########

    def collect_samples
        all_samples = []

        all_samples << { item: @beads } if @plan_params[:run_calibration_beads]

        CONTROL_NAMES.each do |name|
            controls(name).each do |item|
                all_samples << { item: item, control: name }
            end
        end

        other_samples.each do |item|
            all_samples << { item: item }
        end

        libraries_to_sort.each do |item|
            all_samples << { item: item, sort: true }
        end

        all_samples
    end

    def controls(name)
        ops = operations.select { |op| op.input('Control?').val =~ /#{name}/i }
        return [] if ops.blank?
        ops.map { |op| op.output(OUTPUT_YEAST).item }
    end

    def libraries_to_sort
        ops = operations.select { |op| sort?(op) }
        items = ops.map { |op| op.output(OUTPUT_YEAST).item }
        items.partition { |item| item.associations[:resuspended] }.reduce(:+)
    end

    def sort?(op)
        op.input('Sort?').val =~ /yes/i
    end

    def other_samples
        ops = operations.select { |op| op.input('Control?').val =~ /no/i && op.input('Sort?').val =~ /no/i }
        return [] if ops.blank?
        ops.map { |op| op.output(OUTPUT_YEAST).item }
    end

    def produce_beads
        beads = produce(new_sample(CALIBRATION_BEADS, of: "Beads", as: "Diluted beads"))
        beads.associate(:sample_tube_label, CALIBRATION_BEADS_LABEL)
    end

    def mark_as_resuspended(item)
        item.associate(:resuspended, true)
    end

    def mark_as_data_collected(item)
        item.associate(:data_collected, true)
    end

    def rounds_complete
        @plan.associations[:rounds_complete] || 0
    end

    def get_job
        operation_ids = operations.map { |op| op.id }
        ja_ids = JobAssociation.where(operation_id: operation_ids).map { |ja| ja.job_id }.uniq
        possible_jobs = Job.find(ja_ids).select { |j| j.active? }

        if possible_jobs.length > 1
            raise "Cannot resolve the current Job"
        else
            possible_jobs.first
        end
    end

    def get_facs(facs_model)
        case facs_model
        when Cytometers::BDAriaIII::CYTOMETER_NAME
            self.extend Cytometers::BDAriaIII
        when Cytometers::SonySH800S::CYTOMETER_NAME
            self.extend Cytometers::SonySH800S
        else
            raise Cytometers::CytometerInputError.new, "Unrecognized FACS Model: #{facs_model}"
        end
    end

    def sort_gate_name
        # TODO: Need a class or module that handles experiment templates
        case @plan_params[:experiment_template]
        when DEFAULT_TEMPLATES[:protein_binding]
            'PE positive'
        when DEFAULT_TEMPLATES[:stability]
            'FITC positive'
        end
    end

    ########## DEBUG METHODS ##########

    def set_test_conditions
        set_test_labels(operations.map { |op| op.input(INPUT_YEAST).item })
    end

    def show_debug_table(samples:)
        debug_table = [["Item", "Label", "Control?", "Sort?"]]
        samples.each do |s|
            debug_table << [s[:item].to_s, sample_tube_label(s[:item]), s[:control], s[:sort]]
        end
        show do
            table debug_table
        end
    end

end

library: {name: ChallengeAndLabelDebug, category: Yeast Display}
code_source:
needs "Standard Libs/Debug"

module ChallengeAndLabelDebug

    require 'json'

    include Debug

    INPUT_YEAST = "Yeast Culture"
    PROTEASE = "Protease"

    OPTIONS = {

    }

    DEBUG_CONCENTRATIONS = {
        'Chymotrypsin' => { stock: 20894 },
        'Trypsin' => { stock: 32881 }
    }
    # Helps create a realistic set of inputs for tests
    #
    # @note Overrides inputs for randomly-generated items
    def override_input_operations

        consolidate_yeast_inputs
        consolidate_protease_inputs

        associate_plan_options(OPTIONS)
    end

    def associate_plan_options(opts)
        plan = operations.first.plan
        plan.associate(:options, opts.to_json)
    end

    def consolidate_yeast_inputs
        grp = operations.group_by { |op| [op.input(INPUT_YEAST).sample, op.input(PROTEASE).sample] }
        consolidate_inputs(grp, INPUT_YEAST)
    end

    def consolidate_protease_inputs
        grp = operations.group_by { |op| op.input(PROTEASE).sample }
        consolidate_inputs(grp, PROTEASE)
        items = operations.map { |op| op.input(PROTEASE).item }.uniq
        items.each { |i| i.associate(:units_per_milliliter, DEBUG_CONCENTRATIONS[i.sample.name][:stock]) }
    end

    def consolidate_inputs(grouped_ops, input_name)
        grouped_ops.values.each do |ops|
            child_item_id = ops.shift.input(input_name).child_item_id
            ops.each do |op|
                op.input(input_name).update_attributes(child_item_id: child_item_id)
            end
        end
    end

end

library: {name: ChallengeAndLabelHelper, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"
needs "Yeast Display/ChallengeAndLabelDebug"

module ChallengeAndLabelHelper

    include YeastDisplayHelper, ChallengeAndLabelDebug

    OUTPUT_YEAST = 'Labeled Yeast Library'

    PROTEASE_CONCENTRATION = 'Protease Concentration'
    PROTEASE = 'Protease'
    ANTIBODY = 'Antibody'
    PRETREATMENT = 'Pretreatment'

    ASSAY_BUFFER = 'Assay Buffer'
    INCUBATION_BUFFER = 'Incubation buffer'
    QUENCH_BUFFER = 'Quench buffer'
    BINDING_BUFFER = 'Binding buffer'
    PRETREATMENT_BUFFER = 'Pretreatment buffer'

    ALL_BUFFERS = [ASSAY_BUFFER, INCUBATION_BUFFER, QUENCH_BUFFER, BINDING_BUFFER]

    BUFFER_CONTAINERS = {
        INCUBATION_BUFFER => '250 ml bottle',
        QUENCH_BUFFER => '100 ml bottle',
        BINDING_BUFFER => '100 ml bottle'
    }

    DEFAULT_CONCENTRATIONS = {
        'Chymotrypsin' => { stock: 36191 },
        'Trypsin' => { stock: 32881 },
        'IL-23R' => { stock: 17.2 }
    }

    # Tells the tech to get some equipment that is needed.
    #
    def prepare_equipment
        show do
            title 'Gather materials'
            check 'Fill 2 buckets with ice.'
            check "Get the 24-well aluminum block out of the 4 #{DEGREES_C}" \
                'refrigerator and place it in one of the ice buckets.'
            check "Set the refigerated centrifuge to 4 #{DEGREES_C}."
        end
    end

    # Decide whether/which proteases are needed; retrieve them and the associated buffers.
    #
    def gather_buffers_and_proteases
        # Decide if the technician needs to retrieve any protease stocks.
        retrieve_protease = @plan_params[:incubate_with_protease] && protease_needed

        operations.retrieve(only: ALL_BUFFERS)
        operations.retrieve(only: PROTEASE) if retrieve_protease

        show do
            title 'Prepare materials'
            note 'Place the PBSF and TBSF (if gathered) on ice.'
            note 'Leave the PBS and TBS (if gathered) at room temperature.'
            note "Let the stocks thaw at room temperature." if retrieve_protease
        end
    end

    # Put all the materials away.
    #
    def clean_up
        show do
           title 'Store pellets on ice'
           note temp_instructions(ON_ICE)

           note 'Keep the labeled cell pellets, in the 24-well aluminum block, on ice until you are ready for FACS.'
        end

        buffers = operations.map { |op| op.inputs.select { |i| ALL_BUFFERS.include?(i.name) } }.flatten
        buffers.map! { |b| b.child_item }.uniq!

        release(buffers, interactive: true)

        show do
           title 'Clean up'

           check 'Any items that remain on the bench (other than the labeled cell pellets) can be discarded.'
           check "Set the refigerated centrifuge back to 25 #{DEGREES_C}."
        end
    end

    ########## LABELS, GETTERS, AND SIMPLE CALCULATIONS ##########

    def binding_buffer(op)
        # @buffer_lookup[op.input(ANTIBODY).sample][BINDING_BUFFER]
        op.input(BINDING_BUFFER).item
    end

    def incubation_buffer(op)
        # @buffer_lookup[op.input(PROTEASE).sample][INCUBATION_BUFFER]
        op.input(INCUBATION_BUFFER).item
    end

    def quench_buffer(op)
        # @buffer_lookup[op.input(PROTEASE).sample][QUENCH_BUFFER]
        op.input(QUENCH_BUFFER).item
    end

    def protease_samples
        # @buffer_lookup.keys.select { |s| s.sample_type.name == PROTEASE }
        operations.map { |op| op.input(PROTEASE).sample }.uniq
    end

    def protease_needed
        operations.select { |op| op.temporary[:treatment_qty] > 0 }.present?
    end

    # Sort operations based on protease and concentration.
    #
    def sort_operations
        operations.sort! { |a, b| sort_list(b, a) <=> sort_list(a, b) }
    end

    # Provide an array of protease name and concentration to sort on.
    #
    def sort_list(x, y)
        [protease_name(x), protease_conc(y)]
    end

    def protease_name(op)
        op.input(PROTEASE).sample.name
    end

    def protease_conc(op)
        conc = op.input(PROTEASE_CONCENTRATION).val

        if conc.negative?
            conc = op.input(PROTEASE).item.get(:expected_treatment_concentration)
            conc ||= 10000
            op.input(PROTEASE_CONCENTRATION).update_attributes(val: conc)
            inspect "Op #{op.id} has been reassigned concentration #{conc}"
        end

        conc
    end

    def abbreviated_concentration(op)
        "#{protease_name(op)[0]}#{protease_conc(op).round}"
    end

    def ops_by_inc_bfr
        operations.group_by { |op| incubation_buffer(op)[:label] }
    end

    def ops_by_binding_bfr
        operations.group_by { |op| binding_buffer(op)[:label] }
    end

    def buffer_container(buffer:, handle:)
        if buffer.name == "PBSF" || buffer.name == "TBSF"
            container_name = BUFFER_CONTAINERS[BINDING_BUFFER]
        else
            container_name = BUFFER_CONTAINERS[handle]
        end

        attributes = { name: container_name, sample_type_id: buffer.sample_type.id }
        container = ObjectType.where(attributes).first
        raise "Container not found" unless container
        container
    end

end

library: {name: FastMixAndQuench, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"

module FastMixAndQuench

    include YeastDisplayHelper
    # Mix the treatment aliquots with the cell suspensions and incubate for the specified time.
    #
    def arrange_tubes(args)
        args = arrange_defaults.merge(args)

        show do
            title "Set up #{args[:treatment_name]} and #{args[:sample_name]} aliquots"
            note temp_instructions(args[:temp])

            note 'Arrange the tubes in a tube holder as shown'

            if args[:grouped_ops].keys.length > 1
                note "Leave space between the groups of tubes"
            end

            h1 = args[:treatment_name].titlecase
            h2 = args[:sample_name].titlecase

            args[:grouped_ops].each do |bfr, ops|
                note "<br>"
                table ops.start_table
                    .custom_column(heading: h1) { |op| treatment_tube_label(op, args[:output_handle]) }
                    .custom_column(heading: h2, checkable: true) { |op| sample_tube_label(op, args[:output_handle]) }
                    .end_table
            end
        end
    end

    def mix_samples(args)
        args = mix_defaults.merge(args)
        show do
            title "Mix #{args[:treatment_name]} and #{args[:sample_name]} aliquots"
            warning 'Before you perform the following steps, set the timer to countdown for 5 minutes.'
            warning "Start the timer as you add the first set of #{args[:treatment_name]} aliquots to the #{args[:sample_name]} aliquots."

            note "Use a multichannel pipettor to transfer #{qty_display(args[:treatment_vol])} of the #{args[:treatment_name]} aliquots into the #{args[:sample_name]} aliquots."
            note "You will only be able to pipet one of the buffers at a time."
            note "Add the buffers in this order: #{args[:grouped_ops].keys.join(', ')}."

            note "After you make the transfer, pipet up and down three times with the multichannel pipettor to mix the samples."
        end
    end

    def incubate(args)
        args = incubate_defaults.merge(args)

        time_left = args[:incubation_time].dup

        show do
            title "Incubate with #{args[:treatment_name]} for #{qty_display(args[:incubation_time])}"

            note "<b>STEP 1:</b> Incubate"
            note "Incubate #{qty_display(args[:incubation_time])} at room temperature."

            while time_left[:qty] > args[:vortex_interval][:qty]
                time_left[:qty] -= args[:vortex_interval][:qty]
                check "Vortex tubes for 5 seconds when #{qty_display(time_left)} remains."
            end

            if args[:quench_protease]
                check 'After the last vortex, open the tubes and get ready to add the quench buffer into the multichannel pipettor.'

                note "<b>STEP 2:</b> Quench and remove buffer"
                note "When the timer is complete, add #{qty_display(args[:quench_vol])} chilled quench buffer to each tube according to the table."

                args[:grouped_ops].each do |bfr, ops|
                    note ""
                    table wash_buffer_table(ops, output_handle: args[:output_handle], buffer_handle: args[:buffer_handle])
                end

                note VORTEX_CELLS
            end

            check SPIN_CELLS
            check REMOVE_BUFFER
        end
    end

    def common_defaults
        {
            treatment_name: 'protease',
            sample_name: 'yeast culture'
        }
    end

    def arrange_defaults
        common_defaults #.merge({})
    end

    def mix_defaults
        common_defaults #.merge({})
    end

    def incubate_defaults
        common_defaults #.merge({})
    end
end

library: {name: LabelWithAntibody, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"

module LabelWithAntibody
    
    include YeastDisplayHelper
    
    # Add diluted antibody to the samples and incubate for the specified time.
    # 
    def incubate_with_antibody(args)
        show do
            title 'Add diluted antibody to cell pellets'
            note temp_instructions(ON_ICE)
                
            note "Add #{qty_display(args[:antibody_qty])} diluted antibody to the each cell pellet."
            note VORTEX_CELLS
            note 'Place the tubes in a small ice-filled box on the nutating mixer.'
            note 'Set the timer and incubate the tubes for 10 minutes.'
        end
        
        show do
            title 'Spin down antibody-labeled cells and remove the supernatant'
            note temp_instructions(ON_ICE)
            
            note 'After incubating the tubes for 10 minutes.'
            check SPIN_CELLS
            check REMOVE_BUFFER
        end
    end
    
end

library: {name: NormalizeCultureDensity, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"

module NormalizeCultureDensity

    include YeastDisplayHelper

    TUBE_50_ML_CONICAL = "50 ml conical tube"
    TUBE_15_ML_CONICAL = "15 ml conical tube"
    TUBE_MICROFUGE = "1.5 ml microfuge tube"

    # Check culture densities, then aliquot and resuspend specified number of cells
    #
    # @param args [Hash]
    # @option args [String] :input_handle  the `Name` of the culture `Input` of the `Operation`
    # @option args [String] :output_handle  the `Name` of the resuspended culture `Output` of the `Operation`
    # @option args [Numeric] :od_ml_needed  the number of cells in each aliquot, as OD*ml
    # @option args [Hash] :temp (YeastDisplayHelper::ROOM_TEMP)  info about the temperature,
    #   usually passed as a constant from `YeastDisplayHelper`
    # @option args [Hash] :resuspend_qty  the volume to resuspend the yeast in
    # @option args [Boolean] :debug (false)  set realistic ODs for testing
    # @return [OperationList] a subset of the `Job Operations` with unique input culture
    def normalize_culture_density(args)

        args = normalize_defaults.update(args)

        input_handle = args[:input_handle]

        normalize_reqd_args.each do |ra|
            unless args[ra]
                raise NormalizeCultureDensityInputError.new(
                    "Required argument :#{ra} not found."
                )
            end
        end

        unique_culture_operations = operations.uniq { |op| op.input(input_handle).item }.extend(OperationList)

        measure_culture_ods(unique_culture_operations)

        unique_culture_operations.each { |op| op.input(input_handle).item.associate(:od, op.temporary[:od]) }

        set_test_ods if args[:debug]

        max_volume = unique_culture_operations.map { |op|library_culture_volume(op, args) }.max

        ops_by_culture_item = operations.group_by { |op| op.input(input_handle).item }

        show do
            title 'Aliquot library cultures'
            note temp_instructions(args[:temp])

            note "You will need #{operations.length} #{destination_tube(max_volume)}s."

            note LABEL_TUBES_FROM_TABLE

            ops_by_culture_item.each do |culture_item, ops|
                note "<b>#{input_handle} Item ID #{culture_item.id}</b>"
                table ops.extend(OperationList).start_table
                    .custom_column(heading: "Label") { |op| sample_tube_label(op, args[:output_handle]) }
                    .custom_column(heading: "Culture (#{MICROLITERS})", checkable: true) { |op| library_culture_volume(op, args) }
                    .end_table
                note " "
            end

            warning 'Balance the tubes with sterile PBS' unless destination_tube(max_volume) == TUBE_MICROFUGE
            note 'Spin 1 min at 5000 x g in a <b>room temperature</b> centrifuge, and aspirate off all the media.'
        end

        resuspend_units = args[:resuspend_qty][:units]
        resuspend_vol = args[:resuspend_qty][:qty].to_s

        ops_by_buffer = operations.group_by { |op| resuspension_buffer(op, args[:buffer_handle]) }

        show do
            title 'Resuspend yeast library cultures'
            note temp_instructions(args[:temp])

            ops_by_buffer.each do |bfr, ops|
                note "<b>#{bfr}</b>"
                table ops.extend(OperationList).start_table
                    .custom_column(heading: "Label") { |op| sample_tube_label(op, args[:output_handle]) }
                    .custom_column(heading: "Vol (#{resuspend_units})", checkable: true) { |op| resuspend_vol }
                    .end_table
                note " "
            end

            note VORTEX_CELLS
        end

        unique_culture_operations
    end

    def resuspension_buffer(op, handle)
        input = op.input(handle)

        if op.temporary[:modified_buffer].present?
            op.temporary[:modified_buffer]
        elsif input.value.present?
            input.value
        elsif input.sample.present?
            input.sample.name
        else
            'not found'
        end
    end

    def normalize_reqd_args
        [:input_handle, :output_handle, :od_ml_needed, :resuspend_qty, :buffer_handle]
    end

    def normalize_defaults
        {
            temp: ROOM_TEMP,
            debug: false
        }
    end

    # Calculate the volume of culture to take based on the OD and the OD*ml needed
    #
    # @param op [Operation]
    # @param [Hash] args
    # @option args [String] :input_handle  the `Name` of the culture `Input` of the `Operation`
    # @option args [Numeric] :od_ml_needed  the number of cells in each aliquot, as OD*ml
    # @return [Numeric] the volume of culture to take, in `MICROLITERS`
    def library_culture_volume(op, args)
        (1000 * args[:od_ml_needed] / (op.input(args[:input_handle]).item.associations[:od] * 10)).round
    end

    def destination_tube(volume)
        if volume > 15000
            return TUBE_50_ML_CONICAL
        elsif volume > 1500
            return TUBE_15_ML_CONICAL
        else
            return TUBE_MICROFUGE
        end
    end

    class NormalizeCultureDensityInputError < StandardError; end

end

library: {name: PrepareTreatmentDilutions, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"

module PrepareTreatmentDilutions
    
    include YeastDisplayHelper
    
    # Dilute treatments to the appropriate concentrations for the assay.
    #
    def prepare_treatment_dilutions(args)
        ops_by_treatment_sample = operations.group_by { |op| op.input(args[:treatment_handle]).sample }
        
        ops_by_treatment_sample.each do |treatment_sample, ops|
            no_prot_ops, some_prot_ops = ops.partition { |op| op.temporary[:treatment_qty].zero? }
            
            if no_prot_ops.present?
                # TODO: this doesn't work if the no treatment controls have different buffers
                # But may not be a problem
                inc_bfr = no_prot_ops.first.input(args[:buffer_handle]).sample.name
             
                tube_labels = no_prot_ops.map { |op| treatment_tube_label(op, args[:output_handle]) }.join("\", \"")
                buffer_qty = qty_display(args[:treatment_working_qty])
                
                show do
                    title "Set up no treatment buffer aliquots"
                    note temp_instructions(args[:temp])
                    
                    note "You will need #{no_prot_ops.length} 1.5 ml microfuge tubes."
                    check "Label the tubes \"#{tube_labels}\"."
                    check "Add #{buffer_qty} #{inc_bfr} to each tube."
                end
            end
            
            if some_prot_ops.present?
                show do
                    title "Set up #{treatment_sample.name} treatment dilutions"
                    note temp_instructions(args[:temp])
                    
                    note "You will need #{some_prot_ops.length} 1.5 ml microfuge tubes."
                    
                    units = args[:treatment_working_qty][:units]
                    
                    note LABEL_TUBES_FROM_TABLE
                    table some_prot_ops.extend(OperationList).start_table
                        .custom_column(heading: "Tube label") { |op| treatment_tube_label(op, args[:output_handle]) }
                        .input_item(args[:treatment_handle])
                        .custom_column(heading: "Treatment (#{units})", checkable: true) { |op| op.temporary[:treatment_qty].round(1) }
                        .custom_column(heading: "Buffer") { |op| op.input(args[:buffer_handle]).sample.name }
                        .custom_column(heading: "Buffer (#{units})", checkable: true) { |op| op.temporary[:buffer_qty].round }
                        .end_table
                end
            end
        end
    end
    
end

library: {name: WashYeast, category: Yeast Display}
code_source:
needs "Yeast Display/YeastDisplayHelper"

module WashYeast
    
    include YeastDisplayHelper
    
    # A general method for washing yeast cultures or suspension.
    #
    def wash_yeast(args)
        args = wash_defaults.merge(args)
        
        unless args[:grouped_ops].present? && args[:grouped_ops].respond_to?(:keys)
            raise WashYeastInputError.new('Operations missing or incorrectly formatted.')
        end
        
        show do
            title "Begin washes"
            
            note "Now you will wash the samples #{args[:n_washes]} times."
            note "Be sure to check the boxes as you go so you don't lose track!"
        end
        
        args[:n_washes].times do |i|
            show do
                title "Wash #{i + 1} of #{args[:n_washes]}"
                note temp_instructions(args[:temp])
                
                note ADD_WASH_BUFFER % args[:wash_vol]
                note VORTEX_CELLS
                
                args[:grouped_ops].each do |bfr, ops|
                    note ""
                    table wash_buffer_table(ops, output_handle: args[:output_handle], buffer_handle: args[:buffer_handle])
                end
                
                check SPIN_CELLS
                check REMOVE_BUFFER
            end
        end
    end
    
    def wash_defaults
        {
            n_washes: 2,
            temp: ROOM_TEMP,
            wash_vol: { qty: 1.0, units: MILLILITERS }
        }
    end
end


# Error class for bad parameters.
class WashYeastInputError < StandardError
    
end

library: {name: YeastDisplayHelper, category: Yeast Display}
code_source:
needs 'Standard Libs/CommonInputOutputNames'
needs "Standard Libs/Units"
needs "Standard Libs/TemporaryTubeLabels"
needs "Yeast Display/YeastDisplayShows"

module YeastDisplayHelper

    include CommonInputOutputNames, Units, TemporaryTubeLabels
    include YeastDisplayShows

    ADD_WASH_BUFFER = "Add %{qty} %{units} of chilled quench buffer to each tube according to the table."
    VORTEX_CELLS = 'After adding buffer, vortex each tube for 3 pulses.'
    SPIN_CELLS = 'Spin 1 min at 5000 x g in a 4 °C microcentrifuge.'
    REMOVE_BUFFER = 'Aspirate off the buffer without disturbing the cell pellet.'
    LABEL_TUBES_FROM_TABLE = 'Label the tubes and add the reagent volumes as indicated'

    ROOM_TEMP = { style: 'bg-color: lightorange', temp: 'AT ROOM TEMPERATURE' }
    ON_ICE = { style: 'bg-color: powderblue', temp: 'ON ICE' }

    INCUBATOR = "30 °C shaker incubator"

    def prepare_media_and_dilute(container, container_group, protocol=:yeast_display)
        container_group.extend(OperationList)

        language = container_specific_language(protocol, container)

        if container == "Labeled Yeast Library Suspension"
            get_media(container_group)
        else
            prepare_media(container_group, language)
        end

        innoculate_flasks(container_group, language)
    end

    def group_ops_by_container
        ops_by_container = operations.group_by { |op| container_name(op) }
        ops_by_container.each_value { |ops_group| ops_group.extend(OperationList) }
        ops_by_container
    end

    def container_name(op, handle=INPUT_YEAST)
        op.input(handle).object_type.name
    end

    def media_volume(op, handle=INPUT_YEAST)
        op.input(handle).item.associations[:media_vol]
    end

    def transfer_volume(op, handle=INPUT_YEAST)
        op.input(handle).item.associations[:txfr_vol]
    end

    def temp_instructions(substitutions)
        "<span style=\"%{style}\">KEEP TUBES AND BUFFERS <b>%{temp}</b></span>" % substitutions
    end

    def materials_prep_temp(substitutions)
        "<span style=\"%{style}\">These materials should be placed <b>%{temp}</b></span>" % substitutions
    end

    def set_unique_items(handle)
        donor = operations.first.input(handle)
        operations.each { |op| op.input(handle).set( { item: donor.item }) }
    end

    def container_specific_language(protocol, container)
        case protocol

        when :yeast_display
            yeast_display_containers(container)

        when :library_transformation
            library_transformation_containers(container)

        else
            raise "Unrecognized Protocol: #{protocol}."

        end
    end

    def yeast_display_containers(container)
        case container

        when "Yeast Library Glycerol Stock"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pipette the entire glycerol stock of each input %{input_type} into the corresponding flask.'
            }

        when "Labeled Yeast Library Suspension"
            {
                flask_type: '15 ml culture tube',
                media_volume: '5 ml',
                passage_amount: 'Using a new 5 ml serological pipette for each sample, pipette %{media_volume} of media into each collection tube, pipette up and down a few times, then transfer to the corresponding culture tube.'
            }

        when "Yeast Library Liquid Culture", "Yeast 5ml culture", "Yeast 50ml culture"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pipette 1 ml of each input %{input_type} into the corresponding flask.'
            }

        when "Yeast Plate", "Divided Yeast Plate"
            {
                flask_type: '15 ml culture tube',
                media_volume: '5 ml',
                passage_amount: 'Pick 1 colony of each input %{input_type} into the corresponding flask.'
            }

        else
            raise "Unrecognized Container for Item in #{container}"

        end
    end

    def library_transformation_containers(container)
        case container

        when "Yeast Plate", "Divided Yeast Plate"
            {
                flask_type: '250 ml baffled flask',
                media_volume: '50 ml',
                passage_amount: 'Pick 1 colony of each input %{input_type} into the corresponding flask.'
            }

        when 'Yeast 50ml culture'
            {
                flask_type: '500 mL baffled flask',
                media_volume: 'the indicated amount',
                passage_amount: 'Pipette the indicated volume of each input %{input_type} into the corresponding flask.'
            }

        when '8 ml High Efficiency Transformation'
            {
                flask_type: '500 ml baffled flask',
                media_volume: '92 ml',
                passage_amount: 'Pipette the entire 8 ml of each input %{input_type} into the corresponding flask.'
            }

        else
            raise "Unrecognized Container for Item in #{container}"

        end
    end

    def mark_cultures_for_discard(culture_items)
        culture_items.each { |item| item.move_to('Culture discard area') }

        ids = culture_items.map { |item| item.to_s }
        discard_date = (Date.today + 2).strftime("%-m/%-d/%y")

        show do
            title "Label cultures with discard date"

            note "Label each of the cultures #{ids.to_sentence} with \"DISCARD ON #{discard_date}\""
        end
    end

    def return_to_incubator
        operations.each { |op| op.output(OUTPUT_YEAST).item.update_attributes(location: INCUBATOR) }
    end

    # Generates table for adding quench buffer to samples.
    #
    # @param ops [OperationList] usually a subset of the operations
    # def quench_buffer_table(ops, output_handle)
    #     ops.start_table
    #         .custom_column(heading: "Yeast library") { |op| library_tube_label(op, output_handle) }
    #         .custom_column(heading: "Buffer") { |op| quench_buffer(op)[:label] }
    #         .end_table
    # end

    # Generates a table for adding wash buffer to the samples.
    #
    def wash_buffer_table(ops, args)
        ops.start_table
            .custom_column(heading: "Sample") { |op| sample_tube_label(op, args[:output_handle]) }
            .custom_column(heading: "Wash Buffer") { |op| op.input(args[:buffer_handle]).sample.name }
            .end_table
    end

    # Retrieve the antibody and dilute it to the appropriate concentration.
    #
    def prepare_reagent(args)
        reagent_name = args[:reagent_name]
        reagent_handle = args[:reagent_handle]
        buffer_handle = args[:buffer_handle]
        stock_per_rxn = args[:stock_per_rxn]
        buffer_per_rxn = args[:buffer_per_rxn]
        temperature = args[:temp] || ON_ICE

        set_unique_items(reagent_handle) if args[:debug]

        operations.retrieve(only: reagent_handle)

        operations.each do |op|
            op.temporary[:modified_buffer] = reagent_label(op, reagent_handle, buffer_handle)
        end

        ops_by_combo = operations.group_by { |op| op.temporary[:modified_buffer] }

        # h1 = "#{reagent_name.sub(/^./, &:upcase)} volume (#{MICROLITERS})"
        # h2 = "Buffer"
        # h3 = "Buffer volume (#{MICROLITERS})"
        # h4 = "Tube label"

        reagent_table = [[
            "#{reagent_name.sub(/^./, &:upcase)}",
            "Volume (#{MICROLITERS})",
            "Buffer",
            "Volume (#{MICROLITERS})",
            "Tube label"
        ]]

        ops_by_combo.each do |combo, ops|
            op = ops[0]
            row = [
                op.input(reagent_handle).item.to_s,
                { content: total_vol(stock_per_rxn, ops.length), check: true },
                op.input(buffer_handle).sample.name,
                { content: total_vol(buffer_per_rxn, ops.length), check: true },
                op.temporary[:modified_buffer]
            ]
            reagent_table.append(row)
        end

        show do
            # TODO Need to calculate the volume for volumes over 1000 ul
            title "Prepare #{reagent_name} dilutions"
            note temp_instructions(temperature)

            note "Dilute the #{ops_by_combo.length > 1 ? reagent_name.pluralize : reagent_name} with buffer according to the table"
            note "Label the tube(s) according to the table"
            table reagent_table
        end

        uniq_items = operations.map { |op| op.input(reagent_handle).item }.uniq
        release(uniq_items, interactive: true)
    end

    def total_vol(vol_per_rxn, n_rxns)
        (vol_per_rxn[:qty] * n_rxns).round
    end

    def reagent_label(op, reagent_handle, buffer_handle)
        reagent_name = op.input(reagent_handle).try(:sample).try(:name) || "unknown"
        buffer_name = op.input(buffer_handle).try(:sample).try(:name) || "unknown"
        "#{reagent_name} in #{buffer_name}"
    end

    def add_input_from_item(op, name, item)
        ft = FieldType.new(
            name: name,
            ftype: "sample",
            parent_class: "OperationType",
            parent_id: nil
        )
        ft.save

        fv = FieldValue.new(
            name: name,
            child_item_id: item.id,
            child_sample_id: item.sample.id,
            role: 'input',
            parent_class: "Operation",
            parent_id: op.id,
            field_type_id: ft.id
        )
        fv.save
    end

    ########## DEBUG METHODS ##########

    def set_test_labels(items)
        items.each_with_index do |item, i|
            item.associate(:sample_tube_label, "S#{i+1}")
        end
    end

    def set_test_ods(items=[])
        items = operations.map { |op| op.input(INPUT_YEAST).item } unless items.present?
        items.uniq.each { |item| item.associate(:od, (2.0 + 3*Random.rand) / 10) }
    end

end

library: {name: YeastDisplayShows, category: Yeast Display}
code_source:
needs 'Standard Libs/CommonInputOutputNames'

module YeastDisplayShows
    
    include CommonInputOutputNames

    def prepare_media(container_group, language)
        flask_type = language[:flask_type]
        media_volume = language[:media_volume]
        
        flask_type = flask_type.pluralize if container_group.length > 1
        
        show do
          title "Prepare media"
          warning "Work in the media bay for media preparation."
          check "Grab #{container_group.length} #{flask_type}."
          
          out_ids = container_group.map { |op| op.output(OUTPUT_YEAST).item.id }.join(", ")
          check "Label each flask or tube with the following ids: #{out_ids}"
          
          note "Add #{media_volume} of the following media into the #{flask_type}."
          
          table media_table(container_group)
        end
    end
  
    def innoculate_flasks(container_group, language)
        passage_amount = language[:passage_amount]
        
        input_type = operations.first.input(INPUT_YEAST).name
        plural_input_type = operations.length > 1 ? input_type.pluralize : input_type
        language = language.merge({ input_type: input_type })
        
        show do
          title "Inoculate #{plural_input_type}"
      
          note passage_amount % language
          table transfer_table(container_group)
        end
    end
    
    def media_table(container_group)
        this_table = container_group.start_table
        this_table = this_table.custom_column(heading: 'Media') { |op| op.input("Media").sample.name }
        
        if container_group.all? { |op| media_volume(op) }
            this_table = this_table.custom_column(heading: 'Volume (ml)') { |op| media_volume(op).round }
        end
        
        this_table.output_item(OUTPUT_YEAST, checkable: true).end_table
    end
    
    def get_media(container_group)
        media = container_group.map { |op| op.input("Media").sample.name }.first
        
        show do
            title "Get media"
            
            check "Get a bottle of #{media}."
        end
    end
    
    def transfer_table(container_group)
        this_table = container_group.start_table.input_item(INPUT_YEAST)
        
        if container_group.any? { |op| sample_tube_label(op.input(INPUT_YEAST).item) }
            this_table = this_table.custom_column(heading: 'Tube label') { |op| sample_tube_label(op.input(INPUT_YEAST).item) }
        end
        
        if container_group.all? { |op| transfer_volume(op) }
            this_table = this_table.custom_column(heading: 'Volume (ml)') { |op| transfer_volume(op).round(1) }
        end
        
        this_table.output_item(OUTPUT_YEAST, checkable: true).end_table
    end
    
    def measure_culture_ods(ops)
        show do
            title 'Measure library culture densities.'
            
            note 'Use the Nanodrop to measure the density of each yeast culture, and record the OD600.'
            warning 'Record the OD600 exactly as it is shown on the screen.'
            
            table ops.start_table
                .input_item(INPUT_YEAST)
                .get(:od, type: 'number', heading: 'OD600')
                .end_table
        end
    end
  
end
